20231028_145313 Admin
Admininstrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Pin Tool Dryer;Pin Tool Dryer
1,1;Refill Trough MCA96 bck;EtOH MCA
1,2;Refill Trough MCA96 mid;ddH2O
1,3;Refill Trough MCA96 frt;10p Bleach
8,0;DiTi 200ul SBS MCA96;200ul DiTi
8,1;BlottingStation;Blot3H2O
8,2;BlottingStation;Blot2Bleach
8,3;BlottingStation;Blot1Cells
15,0;iPT384;iPT384
22,0;Trough 300ml MCA96;Medium
22,1;12Col Through;Strain Reservoir
22,2;Trough 300ml MCA96;MiliQ
30,0;Trough 100ml;Labware14
30,1;Trough 100ml;Labware15
30,2;Trough 100ml;Labware16
31,0;Wash Station Cleaner shallow
31,1;Wash Station Waste
31,2;Wash Station Cleaner deep
32,0;Wash Station Cleaner shallow
32,1;Wash Station Waste
32,2;Wash Station Cleaner deep
33,0;384 Well Plate Greiner;lid1
33,1;384 Well Plate Greiner;lid2
40,0;384 Well Plate Greiner;plate1
40,1;384 Well Plate Greiner;plate2
40,2;96 Well Greiner SC;greiner96
46,0;Pos Camera;CAM
46,1;384 Agar Plate Greiner;placeholder2
62,0;Agar Spot Plate;Labware12
62,1;Agar Spot Plate;Labware13
1;System
51;Infinite 200
34;Te-Shake
68;StoreX 22Pos
41;RoMa Reference Site
14;Shelf 8x4Pos;384 Well Plate Greiner
63;MTP Waste
53;Hotel384;96 DeepWell Greiner
57;HotelAgar;384 Agar Plate Greiner
61;HotelAgar;384 Agar Plate Greiner
65;Hotel384;96 DeepWell Greiner
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--{ RPG }--
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Tecan Data Interface\Tecan Reader Data\<YYYY-MM-DD HH-mm-ss>.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="COMPUTER" createdAt="2023-10-28T12:52:58.9984813Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement class="Measurement">
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="MAG_GRE96ft" plateWithCover="False">
<PlateRange range="A1:H6" auto="false">
<Shaking mode="Linear" time="PT5S" frequency="0" amplitude="1000" maxDeviation="PT0S" settleTime="PT0S" />
<Shaking mode="Orbital" time="PT5S" frequency="0" amplitude="1000" maxDeviation="PT0S" settleTime="PT0S" />
<MeasurementLuminescence mode="Normal" name="LUMI" dualColor="false">
<Well auto="true">
<MeasurementReading beamDiameter="0" beamGridType="Single" beamGridSize="0">
<ReadingLabel name="Label1" scanType="ScanFixed">
<ReadingTime integrationTime="1000000" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Em" wavelength="0" bandwidth="0" attenuation="0" usage="EMPTY" />
</ReadingLabel>
</MeasurementReading>
</Well>
</MeasurementLuminescence>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
